opentrons/protocol-designer 3.0.4
schemaVersion: 3
protocolName: 384_part_1_media
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p50_multi: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  (Retired) TipOne 96 Tip Rack 200 µL: {definitionId: opentrons/tipone_96_tiprack_200ul/1, slot: 1}
  test: {definitionId: opentrons/corning_384_wellplate_112ul_flat/1, slot: 7}
  media: {definitionId: opentrons/usascientific_12_reservoir_22ml/1, slot: 4}
pipetteTiprackAssignments:
  p50_multi: opentrons/tipone_96_tiprack_200ul/1
ingredients:
  - Tween
  - Propionic
  - L-HIST
ingredLocations:
  media:
    Tween {volume: 5000}: A1
    Propionic {volume: 5000}: A2
    L-HIST {volume: 5000}: A3
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: media
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: test
  dispense_wells: A1-A12
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: media
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: test
  dispense_wells: A13-A24
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: media
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: test
  dispense_wells: B1-B12
  dispense_mmFromBottom: 0.5
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p50_multi, labware: (Retired) TipOne 96 Tip Rack 200 µL, well: A1}
- aspirate: {pipette: p50_multi, volume: 50, labware: media, well: A1, offsetFromBottomMm: 1, flowRate: 25}
- dispense: {pipette: p50_multi, volume: 50, labware: test, well: A1, offsetFromBottomMm: 0.5, flowRate: 50}
- aspirate: {pipette: p50_multi, volume: 50, labware: media, well: A1, offsetFromBottomMm: 1, flowRate: 25}
- dispense: {pipette: p50_multi, volume: 50, labware: test, well: A2, offsetFromBottomMm: 0.5, flowRate: 50}
- aspirate: {pipette: p50_multi, volume: 50, labware: media, well: A1, offsetFromBottomMm: 1, flowRate: 25}
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